PsychoPy2experiment version="2026.2.3"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent line1
      fillColor = white
      ori = 90
      pos = (-150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line2
      fillColor = white
      ori = 90
      pos = (-50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line3
      fillColor = white
      ori = 90
      pos = (50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line4
      fillColor = white
      ori = 90
      pos = (150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent probe
      fillColor = white
      pos [set every repeat] = (pos, 60)
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 2.0
      units = pix
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    KeyboardComponent key_resp
      correctAns = $corr_resp 
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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  Routine trial_random
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    PolygonComponent Fixation_2
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent line1_2
      fillColor = white
      ori = 90
      pos = (-150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line2_2
      fillColor = white
      ori = 90
      pos = (-50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line3_2
      fillColor = white
      ori = 90
      pos = (50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line4_2
      fillColor = white
      ori = 90
      pos = (150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent probe_2
      fillColor = white
      pos [set every repeat] = (pos, 60)
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 2.0
      units = pix
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    KeyboardComponent key_resp_2
      correctAns = $corr_resp 
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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  Routine Instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment

        On your screen you will see 4 bars, press z if the triangle is on the first bar, x if on the second, c if on the third and v if on the fourth

        Press space to begin
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thank_you
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2
      text = Thank you for your participation
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/anayatalesra/Desktop/Sequence_condition.csv
    loopType = sequential
    nReps = 50
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    conditions:
      [OrderedDict([('pos', np.int64(-50)), ('corr_resp', 'x')]),
      OrderedDict([('pos', np.int64(150)), ('corr_resp', 'v')]),
      OrderedDict([('pos', np.int64(50)), ('corr_resp', 'c')]),
      OrderedDict([('pos', np.int64(-150)), ('corr_resp', 'z')])]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = /Users/anayatalesra/Desktop/Sequence_condition.csv
    loopType = fullRandom
    nReps = 50
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    conditions:
      [OrderedDict([('pos', np.int64(-50)), ('corr_resp', 'x')]),
      OrderedDict([('pos', np.int64(150)), ('corr_resp', 'v')]),
      OrderedDict([('pos', np.int64(50)), ('corr_resp', 'c')]),
      OrderedDict([('pos', np.int64(-150)), ('corr_resp', 'z')])]
    Routine trial_random
  LoopTerminator trials_2
  Routine Thank_you
